PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  expName = Solo project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar" , "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = studywords solo project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'dog-bone'},
      {'study_word': 'cat-bat'},
      {'study_word': 'sun-moon'},
      {'study_word': 'bread-butter'},
      {'study_word': 'pen-paper'},
      {'study_word': 'car-road'},
      {'study_word': 'cry-baby'},
      {'study_word': 'cow-milk'},
      {'study_word': 'music-song'},
      {'study_word': 'winter-snow'},
      {'study_word': 'flower-garden'},
      {'study_word': 'spoon-fork'},
      {'study_word': 'chair-table'},
      {'study_word': 'lock-key'},
      {'study_word': 'salt-pepper'},
      {'study_word': 'teacher-student'},
      {'study_word': 'candle-cake'},
      {'study_word': 'train-station'},
      {'study_word': 'grocery-bag'},
      {'study_word': 'hand-finger'},
      {'study_word': 'phone-call'},
      {'study_word': 'bird-fly'},
      {'study_word': 'apple-fruit'},
      {'study_word': 'screw-driver'},
      {'study_word': 'star-sky'},
      {'study_word': 'lemon-wallet'},
      {'study_word': 'pilot-knife'},
      {'study_word': 'mirror-truck'},
      {'study_word': 'axe-leaf'},
      {'study_word': 'box-floor'},
      {'study_word': 'tree-soup'},
      {'study_word': 'boat-dirt'},
      {'study_word': 'desk-wall'},
      {'study_word': 'hat-book'},
      {'study_word': 'knee-gum'},
      {'study_word': 'door-coin'},
      {'study_word': 'bed-gold'},
      {'study_word': 'shoe-fence'},
      {'study_word': 'fish-belt'},
      {'study_word': 'button-hole'},
      {'study_word': 'shirt-juice'},
      {'study_word': 'mop-cloud'},
      {'study_word': 'cube-glasses'},
      {'study_word': 'cap-map'},
      {'study_word': 'curtain-bin'},
      {'study_word': 'wave-stool'},
      {'study_word': 'logo-pan '},
      {'study_word': 'light-page'},
      {'study_word': 'reservoir-building'},
      {'study_word': 'ceiling-charger'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test words solo project.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': '_ _ _ - bone', 'reference': 'dog-bone'},
      {'test_word': '_ _ _ - bat', 'reference': 'cat - bat'},
      {'test_word': 'sun - _ _ _ _', 'reference': 'sun - moon'},
      {'test_word': '_ _ _ _ _ - butter', 'reference': 'bread - butter'},
      {'test_word': 'pen-_ _ _ _ _', 'reference': 'pen - paper'},
      {'test_word': '_ _ _ - road', 'reference': 'car - road'},
      {'test_word': 'cry - _ _ _ _', 'reference': 'cry - baby'},
      {'test_word': '_ _ _ - milk', 'reference': 'cow - milk'},
      {'test_word': 'music - _ _ _ _', 'reference': 'music - song'},
      {'test_word': 'winter - _ _ _ _', 'reference': 'winter - snow'},
      {'test_word': 'flower - _ _ _ _ _ _ ', 'reference': 'flower - garden '},
      {'test_word': 'spoon - _ _ _ _', 'reference': 'spoon - fork'},
      {'test_word': '_ _ _ _ _ - table', 'reference': 'chair - table'},
      {'test_word': 'lock - _ _ _', 'reference': 'lock - key'},
      {'test_word': 'salt - _ _ _ _ _ _', 'reference': 'salt - pepper'},
      {'test_word': 'teacher - _ _ _ _ _ _ _', 'reference': 'teacher - student'},
      {'test_word': 'candle - _ _ _ _', 'reference': 'candle - cake'},
      {'test_word': '_ _ _ _ _ - station', 'reference': 'train - station'},
      {'test_word': 'grocery - _ _ _', 'reference': 'grocery - bag'},
      {'test_word': 'hand - _ _ _ _ _ _', 'reference': 'hand - finger '},
      {'test_word': '_ _ _ _ _ - call', 'reference': 'phone - call'},
      {'test_word': 'bird - _ _ _', 'reference': 'bird - fly'},
      {'test_word': 'apple - _ _ _ _ _', 'reference': 'apple - fruit'},
      {'test_word': '_ _ _ _ _ - driver', 'reference': 'screw - driver'}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
    Routine test
  LoopTerminator trials_2
