PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP" +   str(future_reward)  +   "after" +  str(delay)  +   "days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.DD.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 52, 'future_reward': 78, 'delay': 44},
      {'reward_today': 35, 'future_reward': 66, 'delay': 91},
      {'reward_today': 71, 'future_reward': 97, 'delay': 58},
      {'reward_today': 42, 'future_reward': 75, 'delay': 33},
      {'reward_today': 18, 'future_reward': 47, 'delay': 120},
      {'reward_today': 64, 'future_reward': 94, 'delay': 79},
      {'reward_today': 28, 'future_reward': 56, 'delay': 62},
      {'reward_today': 83, 'future_reward': 108, 'delay': 26},
      {'reward_today': 39, 'future_reward': 68, 'delay': 110},
      {'reward_today': 25, 'future_reward': 52, 'delay': 37},
      {'reward_today': 47, 'future_reward': 79, 'delay': 65},
      {'reward_today': 58, 'future_reward': 88, 'delay': 49},
      {'reward_today': 13, 'future_reward': 37, 'delay': 103},
      {'reward_today': 76, 'future_reward': 112, 'delay': 70},
      {'reward_today': 62, 'future_reward': 99, 'delay': 45},
      {'reward_today': 31, 'future_reward': 58, 'delay': 85},
      {'reward_today': 49, 'future_reward': 77, 'delay': 28},
      {'reward_today': 66, 'future_reward': 104, 'delay': 91},
      {'reward_today': 22, 'future_reward': 51, 'delay': 56},
      {'reward_today': 54, 'future_reward': 93, 'delay': 68}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
    Routine trial
  LoopTerminator trials
