PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/ragini/Downloads/cond-4.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'c', 'correct_response': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'i', 'correct_response': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'i', 'correct_response': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'c', 'correct_response': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
